<?xml version="1.0" encoding="utf-8" ?>
<Feature SiLA2Version="0.1" FeatureVersion="1.0" Originator="de.cetoni" Category="pumps.syringepumps" xmlns="http://www.sila-standard.org" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xsi:schemaLocation="http://www.sila-standard.org https://gitlab.com/SiLA2/sila_base/raw/master/schema/FeatureDefinition.xsd">
    <Identifier>PumpDriveControlService</Identifier>
    <DisplayName>Pump Drive Control Service</DisplayName>
    <Description>
        Functionality to control and maintain the drive that drives the pump.
        Allows to initialize a pump (e.g. by executing a reference move) and obtain status information about the pump drive's current state (i.e. enabled/disabled).
        The initialization has to be successful in order for the pump to work correctly and dose fluids. If the initialization fails, the StandardExecutionError InitializationFailed is thrown.
    </Description>

    <!-- Commands -->
    <Command>
        <Identifier>InitializePumpDrive</Identifier>
        <DisplayName>Initialize Pump Drive</DisplayName>
        <Description>Initialize the pump drive (e.g. by executing a reference move).</Description>
        <Observable>No</Observable>
        <Response>
            <Identifier>Success</Identifier>
            <DisplayName>Success</DisplayName>
            <Description>A boolean value where false represents a failed initialisation and true represents a successful initialisation.</Description>
            <DataType>
                <Basic>Boolean</Basic>
            </DataType>
        </Response>
        <StandardExecutionErrors>
            <StandardExecutionErrorIdentifier>InitializationFailed</StandardExecutionErrorIdentifier>
        </StandardExecutionErrors>
    </Command>
    <Command>
        <Identifier>EnablePumpDrive</Identifier>
        <DisplayName>Enable Pump Drive</DisplayName>
        <Description>Set the pump into enabled state.</Description>
        <Observable>No</Observable>
    </Command>
    <Command>
        <Identifier>DisablePumpDrive</Identifier>
        <DisplayName>Disable Pump Drive</DisplayName>
        <Description>Set the pump into disabled state.</Description>
        <Observable>No</Observable>
    </Command>

    <!-- Properties -->
    <Property>
        <Identifier>PumpDriveState</Identifier>
        <DisplayName>Pump Drive State</DisplayName>
        <Description>The current state of the pump. This is either enabled or disabled. Only if the sate is enabled, the pump can dose fluids.</Description>
        <DataType>
            <Basic>Boolean</Basic>
        </DataType>
        <Observable>Yes</Observable>
    </Property>
    <Property>
        <Identifier>FaultState</Identifier>
        <DisplayName>Fault State</DisplayName>
        <Description>Returns if the pump is in fault state. If the value is true (i.e. the pump is in fault state), it can be cleared by calling EnablePumpDrive.</Description>
        <DataType>
            <Basic>Boolean</Basic>
        </DataType>
        <Observable>Yes</Observable>
    </Property>

    <!-- Errors -->
    <StandardExecutionError>
        <Identifier>InitializationFailed</Identifier>
        <DisplayName>Initialization Failed</DisplayName>
        <Description>The initialization did not end properly.</Description>
    </StandardExecutionError>
</Feature>
